OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Stim check => #0
  Box Clock frequency (Hz) = 128
  Script = C:/Users/chris/OneDrive/Área de Trabalho/Palmilha/bciOpenVibe/Stimcheck.py
  Sensor Length = 4
  Sensor Sampling frequency = 120
  Generated epoch sample count = 1
  MQTT Server Host = 192.168.0.3
  MQTT Gate = 1883
  IMU Sensor Number = 1488
Palmilhha Acquisition => #1
  Box Clock frequency (Hz) = 128
  Script = C:/Users/chris/OneDrive/Área de Trabalho/Palmilha/bciOpenVibe/mqttInputPalmilha.py
  Sensor Length = 7
  Sensor Sampling frequency = 120
  Generated epoch sample count = 1
  MQTT Server Host = 192.168.0.3
  MQTT Gate = 1883
  IMU Sensor Number = 3952
Palmilha Stim => #2
  Box Clock frequency (Hz) = 128
  Script = C:/Users/chris/OneDrive/Área de Trabalho/Palmilha/bciOpenVibe/mqttInputPalmilhaStim.py
  Sensor Length = 7
  Sensor Sampling frequency = 120
  Generated epoch sample count = 1
  MQTT Server Host = 192.168.0.3
  MQTT Gate = 1883
  IMU Sensor Number = 9744
Input 1=#1, Input 2=#2 -> Signal Merger => #3
Input 1=#0, Input 2=#3 -> Signal Merger => #4
Input stream=#4 -> CSV File Writer
  Filename = C:/Users/chris/OneDrive/Área de Trabalho/insole_teste_openvibe/insole_teste.csv.txt
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 5000
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
