OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  The clock stimulator generates
  1 stim per second.

  The associated python script should
  print all the received stimulations.

RPM Generator => #0
  Clock frequency (Hz) = 64
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/valuesGenerator.py
  Channel count = 1
  Sampling frequency = 1
  Generated epoch sample count = 1
  RPM = 100
Data=#0 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0 -> Raw MQTTT Output
  Clock frequency (Hz) = 20
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/rawmqttOutput.py
  MQTTHost = 10.1.1.243
  MQTTPort = 1883
  topic =
Lua Stimulator => #3
  Lua Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/sample-lua-script.lua
rpm=#0, StartTrigger=#3 -> Stimulation for Walk
  Clock frequency (Hz) = 64
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/mqttOutputWalk.py
  MQTT Server Host = 10.1.0.44
  MQTT Gate = 1883
  Stimulation Box Number = 4360
  Pulse Width = 200
  Stim Frequence (Hz) = 50
  Fase1 = 7,0,0,8;7,0,8,0
  Fase2 = 7,0,0,0;0,8,0,8
  Fase3 = 7,0,8,0;7,0,0,8
  Fase4 = 0,8,0,8;7,0,0,0
  Stimulation Box Number 2 = 3632

Stimulation for Bike
  Clock frequency (Hz) = 64
  Script = C:/Users/andre/Desktop/openvibePythonScripts_Denis/mqttOutputBike.py
  MQTT Server Host = 10.1.0.44
  MQTT Gate = 1883
  Stimulation Box Number = 4360
  Pulse Width = 200
  Stim Frequence (Hz) = 50
  Right Leg Stim = 5,5,0,0
  Left Leg Stimulation = 0,0,5,5

Request Data
  Clock frequency (Hz) = 20
  Script = /media/andre/andre3/projetos/bciOpenVibe/requestData.py
  MQTTHost = 10.1.1.243
  MQTTPort = 1883
  Time = 0
